PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = sheb_replic_180522
  Screen = 1
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Routines
  Routine end_block
    TextComponent text_6
      text [set every repeat] = "This is the end of part " + `$myBlockCount` + " of the experiment.\n\nPress SPACE BAR to continue."
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine display_words
    TextComponent w1
      text [set every repeat] = $word1
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent w2
      text [set every repeat] = $word2
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA
      letterHeight = 0.1
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    TextComponent w3
      text [set every repeat] = $word3
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA*2
      letterHeight = 0.1
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    TextComponent w4
      text [set every repeat] = $word4
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA*3
      letterHeight = 0.1
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    TextComponent memory_period
      stopVal [duration (s)] = $mem_per
      startVal [time (s)] = $SOA*3 + word_duration
      letterHeight = 0.1
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  Routine training
  Routine init_vars
    CodeComponent code
      Begin Experiment:
        ## Set global variables

        fix_point_duration = 1  # orig = 3

        word_duration = .1  # how long is each word shown for (orig = .1)
        SOA = .5  # stimulus onset asynchrony (orig = .5)

        mem_per = 2 # time during which words have to be kept in memory (orig = 6)

        max_response_time = 30  # max time to repeat words before moving to next trial
        min_response_time = 2  # minimum time before participants can press SPACE to move on
  Routine instr_start_real_thing
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Okay, you will now begin the actual task.

        Press SPACE BAR when ready
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine fixation
    PolygonComponent point
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.035, 0.05)
      fillColor = $[1,1,1]
      nVertices = 999
      stopVal [duration (s)] = $fix_point_duration
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  Routine instr_exp1
    TextComponent text_8
      text = "It works as follows:\n\nYou see four words presented one after another on the screen, followed by a pause during which you have to keep the four words in memory in the exact order they were presented. You will then hear a beep. At the beep, you have to repeat the four words out loud." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_exp2
    TextComponent text_9
      text = "The experiment is divided into four parts. In each part, you will be asked to memorize the words while doing different exercises. You will either have to wait silently, perform a rhythmic pattern with your hands or with your feet, or repeat the syllable 'bla'. At the beginning of each part you will receive detailed instructions from the experimenter and you will have plenty of time to practice." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine block_instr
    CodeComponent code_4
      Begin Routine:
        myBlockCount += 1
    TextComponent block_intro
      text [set every repeat] = "Part " + `$myBlockCount` + "\n\nBlock type: " + $BlockType + "\n\nReady?\n\nThen press SPACE BAR!"
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine block_instr2
    TextComponent text_2
      text [set every repeat] = "In this block, you will have to " + $BlockInstructions + " while you keep the words in memory.\n\nThe experimenter will explain the details now and you will get some practice before starting."
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine repeat_words
    MicrophoneComponent mic_1
      stereo = False
      stopVal [duration (s)] = $max_response_time
      startVal [time (s)] = 0.0
    KeyboardComponent key_resp_2
      stopVal [duration (s)] = $max_response_time
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = $min_response_time
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    SoundComponent sound_2
      sound = 880
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 0
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  Routine trial
  Routine train
    TextComponent text_4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You will start a training phase now.

        Press SPACE BAR to continue
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent text
      text = Thank you for participating!
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instr_welcome
    CodeComponent code_2
      Begin Experiment:
        ## Set global (experiment-level) variables

        pptID = expInfo['participant']  # participant ID (NB: not int type!)
        print("participant ID is " + pptID)

        sess = int(expInfo['session'])  # session converted to int

        myBlockCount = 0  # count blocks to use in text displays


        ## Duration-related variables (set here rather than in individ elements)

        # If session = 9, then speed through the screens
        if sess == 9:
            fix_point_duration = .1  # orig = 3
            word_duration = .1  # how long is each word shown for (orig = .1)
            SOA = .2  # stimulus onset asynchrony (orig = .5)
            mem_per = .1 # time during which words have to be kept in memory (orig = 6)
        else:  # otherwise use the standard duration
            fix_point_duration = 3  # orig = 3
            word_duration = .1  # how long is each word shown for (orig = .1)
            SOA = .5  # stimulus onset asynchrony (orig = .5)
            mem_per = 6 # time during which words have to be kept in memory (orig = 6)

        max_response_time = 120  # max time to repeat words before moving to next trial
        min_response_time = 0  # minimum time before participants can press SPACE to move on


        ## Other

        cont = "\n\nPress space bar to continue"  # At the end of instructions slides
    TextComponent text_7
      text = "Welcome to this experiment!\n\nIn this task you will see four words in a sequence and you will have to remember them. Shortly after, you will be asked to repeat the words in the exact same sequence." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine repeat_training
    TextComponent text_5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        If you need more training, press 't';
        To start the actual experiment, press 's'.
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 't','s'
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      End Routine:
        if key_resp_8.keys == "s": break  # allow to repeat training until ready (max 10, see loop)
Flow
  Routine instr_welcome
  Routine instr_exp1
  Routine instr_exp2
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = conditions_block.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('BlockType', u'CONTROL'), ('BlockInstructions', u'wait silently'), ('BlockPrompt', u'(remain silent)')]),
      OrderedDict([('BlockType', u'ARM'), ('BlockInstructions', u'perform a simple drumming exercise with your arms'), ('BlockPrompt', u'(arm paradiddle)')]),
      OrderedDict([('BlockType', u'LEGS'), ('BlockInstructions', u'perform a simple drumming exercise with your legs'), ('BlockPrompt', u'(leg paradiddle)')]),
      OrderedDict([('BlockType', u'ARTICULATION'), ('BlockInstructions', u'repeat the syllable "bla" continuously'), ('BlockPrompt', u'(repeat "bla")')])]
    Routine block_instr
    Routine block_instr2
    Routine train
    LoopInitiator training_block loopType="TrialHandler"
      loopType = random
      nReps = 10
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      LoopInitiator word_presentation_training loopType="TrialHandler"
        conditionsFile = conditions_training_test.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('ItemID', 1), ('word1', u'tree'), ('word2', u'chair'), ('word3', u'book'), ('word4', u'pen')]),
          OrderedDict([('ItemID', 2), ('word1', u'painting'), ('word2', u'sheet'), ('word3', u'mouse'), ('word4', u'horse')])]
        Routine fixation
        Routine display_words
        Routine repeat_words
      LoopTerminator word_presentation_training
      Routine repeat_training
    LoopTerminator training_block
    Routine instr_start_real_thing
    LoopInitiator word_presentation loopType="TrialHandler"
      conditionsFile = conditions_exp-trials_test.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('ItemID', 1), ('type', u'arm'), ('word1', u'peel'), ('word2', u'bash'), ('word3', u'chop'), ('word4', u'clap')]),
        OrderedDict([('ItemID', 2), ('type', u'arm'), ('word1', u'scratch'), ('word2', u'skim'), ('word3', u'grab'), ('word4', u'scrub')]),
        OrderedDict([('ItemID', 4), ('type', u'leg'), ('word1', u'hop'), ('word2', u'stomp'), ('word3', u'limp'), ('word4', u'skip')]),
        OrderedDict([('ItemID', 5), ('type', u'leg'), ('word1', u'stamp'), ('word2', u'scuff'), ('word3', u'leap'), ('word4', u'crawl')])]
      Routine fixation
      Routine display_words
      Routine repeat_words
    LoopTerminator word_presentation
    Routine end_block
  LoopTerminator block
  Routine thanks
